PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = typo_VersionB
  logging level = debug
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Routines
  Routine trial
  Routine word_intro
    TextComponent wordInst
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a series of words, presented one after another. Some of these words will be jumbled. For example, the word 'front' might appear as 'fornt'.

        Your job is to read the words out loud. If the word is jumbled, please read it as if it were unjumbled. For example, please say 'front' when presented with 'fornt' and 'happy' when presented with 'haypp'.

        As the words appear, you will hear a sound. Please try to respond as fast and accurate as you can after the sound. If you cannot unjumble the word, please try your best.

        Press the spacebar to complete a few practice trials.
    KeyboardComponent proceed1
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine word_practice
    TextComponent wordPrac
      letterHeight = 0.1
      startVal [time (s)] = iti
      text [set every repeat] = $word
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    KeyboardComponent wordPrac_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent beepPrac
      sound [set every repeat] = audio/beep.wav
      startVal [time (s)] = iti
      stopVal [duration (s)] = 0.2
      volume = 0.5
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    TextComponent proceedPrac
      letterHeight = 0.02
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Press space to proceed
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    TextComponent ITI1
      letterHeight = 0.1
      stopVal [duration (s)] = iti
      text [set every repeat] = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        iti = random() * (1.5 - 1.0) + 1.0
        iti = round(iti, 2)
        thisExp.addData('iti', iti)
  Routine great
    TextComponent word_great
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great! Do you have any questions?

        When you’re ready, press the space bar to proceed.
    KeyboardComponent proceed2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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  Routine words
    TextComponent wordStim
      letterHeight = 0.1
      startVal [time (s)] = iti
      text [set every repeat] = $word
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    KeyboardComponent wordResp
      allowedKeys = 'space'
      correctAns = $resp
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent proceed3
      letterHeight = 0.02
      pos = (0, -0.25)
      startVal [time (s)] = 0
      text = Press space to proceed
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    SoundComponent wordBeep
      sound [set every repeat] = audio/beep.wav
      startVal [time (s)] = iti
      stopVal [duration (s)] = 0.2
      syncScreenRefresh = False
      volume = 0.5
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    TextComponent ITI2
      letterHeight = 0.1
      stopVal [duration (s)] = iti
      text [set every repeat] = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        iti = random() * (1.5 - 1.0) + 1.0
        iti = round(iti, 2)
        thisExp.addData('iti', iti)
  Routine word_diff
    TextComponent word_difficulty
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-10, how difficult was it to read the jumbled words?
        Click on the scale below.
    SliderComponent diffRating
      forceEndRoutine = True
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7,  8, 9, 10
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7,  8, 9, 10)
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  Routine fatigue
    TextComponent tired
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-10, how tired are you?
        Click on the scale below.
    SliderComponent fatigueRating
      forceEndRoutine = True
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7,  8, 9, 10
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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  Routine sen_intro
    TextComponent senInst
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now, you will see a series of sentences instead of words, one after another.

        Your job is to read the sentences out loud. If some of the sentences are jumbled, plsaee raed it as if it wree unjbmuled.

        As the sentences appear, you will hear a sound. After the sound, please try to respond as fast as you can while understanding the sentences to the best of your ability.
    KeyboardComponent proceed4
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine sen_practice
    TextComponent sentPrac
      letterHeight = 0.04
      startVal [time (s)] = iti
      text [set every repeat] = $sentence
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    KeyboardComponent sentPrac_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent beepSentPrac
      sound [set every repeat] = audio/beep.wav
      startVal [time (s)] = iti
      stopVal [duration (s)] = 0.2
      volume = 0.5
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    TextComponent proceedSent
      letterHeight = 0.02
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Press space to proceed
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    TextComponent ITI3
      letterHeight = 0.1
      stopVal [duration (s)] = iti
      text [set every repeat] = +
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        iti = random() * (1.5 - 1.0) + 1.0
        iti = round(iti, 2)
        thisExp.addData('iti', iti)
  Routine block2_intro
    TextComponent block2Intro
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin the actual task.

        This time, the sentences may not make sense. For example, you will see sentences like “The loud grape was grateful to sing a tower”.

        Please do not worry about the meaning and focus on reading the sentences as fast and accurate as you can.

        When you’re ready, press space bar to proceed.
    KeyboardComponent proceed5
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine meaningless
    TextComponent nonsenseStim
      letterHeight = 0.04
      startVal [time (s)] = iti
      text [set every repeat] = $sentence
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    KeyboardComponent nonsenseResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent proceed8
      letterHeight = 0.02
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Press space to proceed
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    SoundComponent nonsenseBeep
      sound = audio/beep.wav
      startVal [time (s)] = iti
      stopVal [duration (s)] = 0.2
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    TextComponent ITI4
      letterHeight = 0.1
      stopVal [duration (s)] = iti
      text [set every repeat] = +
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        iti = random() * (1.5 - 1.0) + 1.0
        iti = round(iti, 2)
        thisExp.addData('iti', iti)
  Routine sent_diff
    TextComponent sent_difficulty
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-10, how difficult was it to read the jumbled sentences?
        Click on the scale below.
    SliderComponent sentRating
      forceEndRoutine = True
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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  Routine block3_intro
    TextComponent block3Intro
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great!

        You will continue reading sentences out loud. Please do not worry about the meaning and focus on reading the sentences as fast and accurate as you can.

        Press the spacebar to proceed.
    KeyboardComponent proceed7
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine meaningful
    TextComponent sentStim
      letterHeight = 0.04
      startVal [time (s)] = iti
      text [set every repeat] = $sentence
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    KeyboardComponent sentResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent proceed6
      letterHeight = 0.02
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Press space to proceed
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    SoundComponent sentBeep
      sound = audio/beep.wav
      startVal [time (s)] = iti
      stopVal [duration (s)] = 0.2
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    TextComponent ITI5
      letterHeight = 0.1
      stopVal [duration (s)] = iti
      text [set every repeat] = +
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        iti = random() * (1.5 - 1.0) + 1.0
        iti = round(iti, 2)
        thisExp.addData('iti', iti)
  Routine strategy
    TextComponent strategyUse
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Did you use any strategies to unjumble the words/sentences?
        If so, what strategies did you use? Please answer the question out loud.

        When you’re done, press the space bar to end the experiment.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine thankyou
    TextComponent thanks
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Thank you for participating in our experiment! 
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    KeyboardComponent escape
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine word_intro2
    TextComponent wordInst2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        As the words appear, you will hear a sound. Please try to respond as fast and accurate as you can after the sound. If you cannot unjumble the word, please try your best.

        Once you respond, press the spacebar to move on to the next word. Only press the spacebar when you are done responding.

        Press the spacebar to complete a few practice trials.
    KeyboardComponent proceed1_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sen_intro2
    TextComponent senInst2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Once you respond, press the spacebar to move on to the next sentence. Only press the spacebar when you are done responding.

        Press the spacebar to complete a few practice trials.
    KeyboardComponent proceed4_2
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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Flow
  Routine word_intro
  Routine word_intro2
  LoopInitiator wordPracLoop loopType="TrialHandler"
    conditionsFile = wordprac.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': 'gmae', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'wsih', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'numreb', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'chcnae', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'wordl', 'resp': 'space', 'beep': 'audio/beep.wav'}]
    Routine word_practice
  LoopTerminator wordPracLoop
  Routine great
  LoopInitiator wordLoop loopType="TrialHandler"
    conditionsFile = word_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': 'hodl', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'advance', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'prbolem', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'originla', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'party', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'could', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'caesu', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'swrod', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'teitsfy', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'poleci', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'aaer', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'culb', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'sedn', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'tomrorow', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'state', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'deyac', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'honey', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'asking', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'threw', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'serve', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'sense', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'later', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'dniyg', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'word': 'soryr', 'resp': 'space', 'beep': 'audio/beep.wav'}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
    Routine words
  LoopTerminator wordLoop
  Routine word_diff
  Routine fatigue
  Routine sen_intro
  Routine sen_intro2
  LoopInitiator sentPracLoop loopType="TrialHandler"
    conditionsFile = sentprac.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sentence': 'Plaese use yuor domniant hnad to resopnd to ecah quetsion.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'My sisret lisek to sgni in the shorew.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'I had soem bacno and oatmela for breakfats.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'You shluod caelr the brswoer hiotsry bofere you lvaee.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The paernts wree bsuy wtih wrok all monring.', 'resp': 'space', 'beep': 'audio/beep.wav'}]
    Routine sen_practice
  LoopTerminator sentPracLoop
  Routine block2_intro
  LoopInitiator nonsenseLoop loopType="TrialHandler"
    conditionsFile = meaningless.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sentence': 'The relxaing veetran conufsed itno the wsie suregry.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The rued oystesr jumpde the casion shoudl shien for the unino.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'He impldei wneh the diplotam and futeru wodlu horon.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'A pretend turning cares for the stone numbers.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The facotry on the dissater detials a sfot vactaion.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'Our attitude swings recently got engaged in the plate.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The darling and bomb of the patience have many laws.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The using suit involved the ground tape twice.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The cheese ideas were murdered by the cheap pocket.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The bath kicked up burning reality to crack the property.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The seeing hotel twisted into the guilty message.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The tiger was injured to guess in the cherry miracle.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'Rerutn to spmile mitunes is csole to primose in snuods.', 'resp': 'space', 'beep': 'audio/beep.wav'}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
    Routine meaningless
  LoopTerminator nonsenseLoop
  Routine sent_diff
  Routine fatigue
  Routine block3_intro
  LoopInitiator meaningLoop loopType="TrialHandler"
    conditionsFile = meaningful.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sentence': 'The mivoe dicertor instsied the aotcr suohld slime for the cemara.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'My classse consuem the majoriyt of my tiem.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'At her weiddng ceromeny she ceird hppay traes.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'His favirote lcnuh is a tuekry sawdnich on waeht baerd.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'He hated when the squid and whale would fight.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'He went to his room without saying goodbye.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The island can be spotted from the beach pier.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The lessons we learn at school are crucial.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'She was laughign at his jokse thta weer not evne funyn.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The laeywrs are tikang aitcon in the case of the vihecle acdicent.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'She was thirlled to haer taht her sitser won the przie.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'The cusotmer demnaded taht he tlak to the maanger.', 'resp': 'space', 'beep': 'audio/beep.wav'},
      {'sentence': 'I bought an adorable collar for my kitten.', 'resp': 'space', 'beep': 'audio/beep.wav'}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
    Routine meaningful
  LoopTerminator meaningLoop
  Routine sent_diff
  Routine fatigue
  Routine strategy
  Routine thankyou
